<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PostDrawingSubject" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PostDrawing</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedRealTime</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
  it.Index as Index,
  it.Value as ElapsedRealTime
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="SyncQuadState" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
        <rx:Name>SyncQuadState</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="Item2" />
        </PropertyMappings>
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" DisplayName="SyncQuadExtentX" />
        <Property Name="ExtentY" DisplayName="SyncQuadExtentY" />
        <Property Name="LocationX" DisplayName="SyncQuadLocationX" />
        <Property Name="LocationY" DisplayName="SyncQuadLocationY" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <LocationX>1</LocationX>
        <LocationY>0</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>0</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1.Index as FrameIndex,
it.Item1.ElapsedRealTime as ElapsedRealTime,
it.Item2 as SyncState
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="9" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="15" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="19" Label="Source1" />
      <Edge From="15" To="20" Label="Source1" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="23" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>